
name: autolamella_demo
stage_rotation: 50
stage_tilt: 20
application_file: autolamella

fiducial:
  length: 10.e-6
  width: 10.e-6
  depth: 2.e-6
  
lamella:
  protocol_stages:
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 10.e-6
    depth: 2.e-6
    offset: 5.e-6
    size_ratio: 1.0
    milling_voltage: 30.0e+3
    milling_current: 2.e-9
    cleaning_cross_section: True
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 1.e-6
    depth: 2.e-6
    offset: 0.5e-6
    size_ratio: 1.0
    milling_voltage: 30.0e+3
    milling_current: 0.2e-9
    cleaning_cross_section: True
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 0.5e-6
    depth: 0.4e-6
    offset: 0.e-6
    size_ratio: 1.0
    milling_current: 60.e-12
    milling_voltage: 30.0e+3
    cleaning_cross_section: True